#V 2.0
# Generated by Configurator on Wed Oct 18 15:37:10 PDT 2017

# Reset
Property,Core,Initialize,0

# Devices
Device,COM5,SerialManager,COM5
Device,COM6,SerialManager,COM6
Device,COM10,SerialManager,COM10
Device,XYStage,Prior,XYStage
Device,Arduino-Hub,Arduino,Arduino-Hub
Device,Arduino-Switch,Arduino,Arduino-Switch
Device,Arduino-Shutter,Arduino,Arduino-Shutter
Device,ZeissScope,ZeissCAN29,ZeissScope
Device,ZeissObjectiveTurret,ZeissCAN29,ZeissObjectiveTurret
Device,ZeissReflectedLightShutter,ZeissCAN29,ZeissReflectedLightShutter
Device,ZeissHalogenLamp,ZeissCAN29,ZeissHalogenLamp
Device,ThorCam,ThorlabsUSBCamera,ThorCam

# Pre-init settings for devices
Property,XYStage,Port,COM6
Property,Arduino-Hub,Logic,Normal
Property,Arduino-Hub,Port,COM10
Property,ZeissScope,AnswerTimeOut,250.0000
Property,ZeissScope,Port,COM5

# Pre-init settings for COM ports
Property,COM5,AnswerTimeout,500.0000
Property,COM5,BaudRate,57600
Property,COM5,DelayBetweenCharsMs,0.0000
Property,COM5,Handshaking,Off
Property,COM5,Parity,None
Property,COM5,StopBits,1
Property,COM5,Verbose,1
Property,COM6,AnswerTimeout,500.0000
Property,COM6,BaudRate,9600
Property,COM6,DelayBetweenCharsMs,0.0000
Property,COM6,Handshaking,Off
Property,COM6,Parity,None
Property,COM6,StopBits,1
Property,COM6,Verbose,1
Property,COM10,AnswerTimeout,500.0000
Property,COM10,BaudRate,57600
Property,COM10,DelayBetweenCharsMs,0.0000
Property,COM10,Handshaking,Off
Property,COM10,Parity,None
Property,COM10,StopBits,1
Property,COM10,Verbose,1

# Hub (parent) references
Parent,Arduino-Switch,Arduino-Hub
Parent,Arduino-Shutter,Arduino-Hub

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions

# Roles
Property,Core,Camera,ThorCam
Property,Core,Shutter,Arduino-Shutter
Property,Core,AutoShutter,0

# Camera-synchronized devices

# Labels
# Arduino-Switch
Label,Arduino-Switch,63,63
Label,Arduino-Switch,62,62
Label,Arduino-Switch,61,61
Label,Arduino-Switch,60,60
Label,Arduino-Switch,59,59
Label,Arduino-Switch,58,58
Label,Arduino-Switch,57,57
Label,Arduino-Switch,56,56
Label,Arduino-Switch,55,55
Label,Arduino-Switch,54,54
Label,Arduino-Switch,53,53
Label,Arduino-Switch,52,52
Label,Arduino-Switch,51,51
Label,Arduino-Switch,50,50
Label,Arduino-Switch,49,49
Label,Arduino-Switch,48,48
Label,Arduino-Switch,47,47
Label,Arduino-Switch,46,46
Label,Arduino-Switch,45,45
Label,Arduino-Switch,44,44
Label,Arduino-Switch,43,43
Label,Arduino-Switch,42,42
Label,Arduino-Switch,41,41
Label,Arduino-Switch,40,40
Label,Arduino-Switch,39,39
Label,Arduino-Switch,38,38
Label,Arduino-Switch,37,37
Label,Arduino-Switch,36,36
Label,Arduino-Switch,35,35
Label,Arduino-Switch,34,34
Label,Arduino-Switch,33,33
Label,Arduino-Switch,32,32
Label,Arduino-Switch,31,31
Label,Arduino-Switch,30,30
Label,Arduino-Switch,29,29
Label,Arduino-Switch,28,28
Label,Arduino-Switch,27,27
Label,Arduino-Switch,26,26
Label,Arduino-Switch,25,25
Label,Arduino-Switch,24,24
Label,Arduino-Switch,23,23
Label,Arduino-Switch,22,22
Label,Arduino-Switch,21,21
Label,Arduino-Switch,20,20
Label,Arduino-Switch,19,19
Label,Arduino-Switch,18,18
Label,Arduino-Switch,17,17
Label,Arduino-Switch,16,16
Label,Arduino-Switch,15,15
Label,Arduino-Switch,14,14
Label,Arduino-Switch,13,13
Label,Arduino-Switch,12,BOTH LED ON
Label,Arduino-Switch,11,11
Label,Arduino-Switch,10,10
Label,Arduino-Switch,9,9
Label,Arduino-Switch,8,UV LED ON
Label,Arduino-Switch,7,7
Label,Arduino-Switch,6,6
Label,Arduino-Switch,5,5
Label,Arduino-Switch,4,561 LED ON
Label,Arduino-Switch,3,3
Label,Arduino-Switch,2,2
Label,Arduino-Switch,1,1
Label,Arduino-Switch,0,0
# ZeissObjectiveTurret
Label,ZeissObjectiveTurret,5,6-Objektiv6
Label,ZeissObjectiveTurret,4,5-Objektiv5
Label,ZeissObjectiveTurret,3,4-Objektiv4
Label,ZeissObjectiveTurret,2,3-EC Plan-Neofluar 40x/0.75
Label,ZeissObjectiveTurret,1,2-Plan-Apochromat 10x/0.45
Label,ZeissObjectiveTurret,0,1-Objektiv1

# Configuration presets
# Group: Channel

# Group: System
# Preset: Startup
#ConfigGroup,System,Startup,PM Cam,ClearMode,Pre-Sequence
#ConfigGroup,System,Startup,Camera-2,ClearMode,Pre-Sequence

#think about opening fluo shutter
#think about setting camera exposure
#




# Group: LED
# Preset: UV LED
ConfigGroup,LED,UV LED,Arduino-Switch,Label,UV LED ON
ConfigGroup,LED,UV LED,Arduino-Switch,State,8

# Preset: 561 LED
ConfigGroup,LED,561 LED,Arduino-Switch,Label,561 LED ON
ConfigGroup,LED,561 LED,Arduino-Switch,State,4

# Preset: BOTH LED
ConfigGroup,LED,BOTH LED,Arduino-Switch,Label,BOTH LED ON
ConfigGroup,LED,BOTH LED,Arduino-Switch,State,12



# PixelSize settings

