# Generated by Configurator on Tue Sep 19 20:02:09 BST 2017

# Reset
Property,Core,Initialize,0

# Devices
Device,PM Cam,PVCAM,Camera-1
Device,Camera-2,PVCAM,Camera-2
Device,Camera-3,PVCAM,Camera-3
Device,Multi Camera,Utilities,Multi Camera

# Pre-init settings for devices

# Pre-init settings for COM ports

# Hub (parent) references

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions

# Roles
Property,Core,Camera,Multi Camera
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels

# Configuration presets
# Group: SMART Streaming Exposure Time
# Preset: NewPreset
ConfigGroup,SMART Streaming Exposure Time,NewPreset,PM Cam,SMARTStreamingValues[ms],10.000;20.000;30.000;40.000
ConfigGroup,SMART Streaming Exposure Time,NewPreset,Camera-2,SMARTStreamingValues[ms],10.000;20.000;30.000;40.000
ConfigGroup,SMART Streaming Exposure Time,NewPreset,Camera-3,SMARTStreamingValues[ms],10.000;20.000;30.000;40.000


# Group: Gain
# Preset: sensitivity
ConfigGroup,Gain,sensitivity,PM Cam,Gain,3-Sensitivity
ConfigGroup,Gain,sensitivity,Camera-2,Gain,3-Sensitivity
ConfigGroup,Gain,sensitivity,Camera-3,Gain,3-Sensitivity

# Preset: balanced
ConfigGroup,Gain,balanced,PM Cam,Gain,2-Balanced
ConfigGroup,Gain,balanced,Camera-2,Gain,2-Balanced
ConfigGroup,Gain,balanced,Camera-3,Gain,2-Balanced

# Preset: HDR (16 bits)
ConfigGroup,Gain,HDR (16 bits),PM Cam,Gain,HDR
ConfigGroup,Gain,HDR (16 bits),Camera-2,Gain,HDR
ConfigGroup,Gain,HDR (16 bits),Camera-3,Gain,HDR

# Preset: Full well
ConfigGroup,Gain,Full well,PM Cam,Gain,1-Full well
ConfigGroup,Gain,Full well,Camera-2,Gain,1-Full well
ConfigGroup,Gain,Full well,Camera-3,Gain,1-Full well


# Group: Fan Speed
# Preset: Off(Liquid Cooled)
ConfigGroup,Fan Speed,Off(Liquid Cooled),PM Cam,FanSpeedSetpoint,Off(Liquid Cooled)
ConfigGroup,Fan Speed,Off(Liquid Cooled),Camera-2,FanSpeedSetpoint,Off(Liquid Cooled)
ConfigGroup,Fan Speed,Off(Liquid Cooled),Camera-3,FanSpeedSetpoint,Off(Liquid Cooled)

# Preset: Medium
ConfigGroup,Fan Speed,Medium,PM Cam,FanSpeedSetpoint,Medium
ConfigGroup,Fan Speed,Medium,Camera-2,FanSpeedSetpoint,Medium
ConfigGroup,Fan Speed,Medium,Camera-3,FanSpeedSetpoint,Medium

# Preset: High
ConfigGroup,Fan Speed,High,PM Cam,FanSpeedSetpoint,High
ConfigGroup,Fan Speed,High,Camera-2,FanSpeedSetpoint,High
ConfigGroup,Fan Speed,High,Camera-3,FanSpeedSetpoint,High

# Preset: Low
ConfigGroup,Fan Speed,Low,PM Cam,FanSpeedSetpoint,Low
ConfigGroup,Fan Speed,Low,Camera-2,FanSpeedSetpoint,Low
ConfigGroup,Fan Speed,Low,Camera-3,FanSpeedSetpoint,Low


# Group: ExposeOut
# Preset: First Row
ConfigGroup,ExposeOut,First Row,PM Cam,ExposeOutMode,First Row
ConfigGroup,ExposeOut,First Row,Camera-2,ExposeOutMode,First Row
ConfigGroup,ExposeOut,First Row,Camera-3,ExposeOutMode,First Row

# Preset: Rolling Shutter
ConfigGroup,ExposeOut,Rolling Shutter,PM Cam,ExposeOutMode,Rolling Shutter
ConfigGroup,ExposeOut,Rolling Shutter,Camera-2,ExposeOutMode,Rolling Shutter
ConfigGroup,ExposeOut,Rolling Shutter,Camera-3,ExposeOutMode,Rolling Shutter

# Preset: Any Row
ConfigGroup,ExposeOut,Any Row,PM Cam,ExposeOutMode,Any Row
ConfigGroup,ExposeOut,Any Row,Camera-2,ExposeOutMode,Any Row
ConfigGroup,ExposeOut,Any Row,Camera-3,ExposeOutMode,Any Row

# Preset: All Rows
ConfigGroup,ExposeOut,All Rows,PM Cam,ExposeOutMode,All Rows
ConfigGroup,ExposeOut,All Rows,Camera-2,ExposeOutMode,All Rows
ConfigGroup,ExposeOut,All Rows,Camera-3,ExposeOutMode,All Rows


# Group: System
# Preset: Startup
ConfigGroup,System,Startup,PM Cam,ClearMode,Pre-Sequence
ConfigGroup,System,Startup,Camera-2,ClearMode,Pre-Sequence
ConfigGroup,System,Startup,Camera-3,ClearMode,Pre-Sequence
ConfigGroup,System,Startup,PM Cam,SMARTStreamingEnabled,No
ConfigGroup,System,Startup,Camera-2,SMARTStreamingEnabled,No
ConfigGroup,System,Startup,Camera-3,SMARTStreamingEnabled,No
ConfigGroup,System,Startup,PM Cam,MetadataEnabled,Yes
ConfigGroup,System,Startup,Camera-2,MetadataEnabled,Yes
ConfigGroup,System,Startup,Camera-3,MetadataEnabled,Yes
ConfigGroup,System,Startup,PM Cam,ReadoutRate,200MHz 12bit
ConfigGroup,System,Startup,Camera-2,ReadoutRate,200MHz 12bit
ConfigGroup,System,Startup,Camera-3,ReadoutRate,200MHz 12bit
ConfigGroup,System,Startup,Core,Camera,Multi Camera
ConfigGroup,System,Startup,Multi Camera,Physical Camera 1,PM Cam
ConfigGroup,System,Startup,Multi Camera,Physical Camera 2,Camera-2
ConfigGroup,System,Startup,Multi Camera,Physical Camera 3,Camera-3
ConfigGroup,System,Startup,PM Cam,ExposeOutMode,All Rows
ConfigGroup,System,Startup,Camera-2,ExposeOutMode,All Rows
ConfigGroup,System,Startup,Camera-3,ExposeOutMode,All Rows
ConfigGroup,System,Startup,PM Cam,Gain,1-Full well
ConfigGroup,System,Startup,Camera-2,Gain,1-Full well
ConfigGroup,System,Startup,Camera-3,Gain,1-Full well
ConfigGroup,System,Startup,PM Cam,FanSpeedSetpoint,High
ConfigGroup,System,Startup,Camera-2,FanSpeedSetpoint,High
ConfigGroup,System,Startup,Camera-3,FanSpeedSetpoint,High


# Group: Cameras
# Preset: TripleCam
ConfigGroup,Cameras,TripleCam,Core,Camera,Multi Camera
ConfigGroup,Cameras,TripleCam,Multi Camera,Physical Camera 1,PM Cam
ConfigGroup,Cameras,TripleCam,Multi Camera,Physical Camera 2,Camera-2
ConfigGroup,Cameras,TripleCam,Multi Camera,Physical Camera 3,Camera-3

# Preset: Camera 3
ConfigGroup,Cameras,Camera 3,Core,Camera,Camera-3
ConfigGroup,Cameras,Camera 3,Multi Camera,Physical Camera 1,Undefined
ConfigGroup,Cameras,Camera 3,Multi Camera,Physical Camera 2,Undefined
ConfigGroup,Cameras,Camera 3,Multi Camera,Physical Camera 3,Undefined

# Preset: Camera 2
ConfigGroup,Cameras,Camera 2,Core,Camera,Camera-2
ConfigGroup,Cameras,Camera 2,Multi Camera,Physical Camera 1,Undefined
ConfigGroup,Cameras,Camera 2,Multi Camera,Physical Camera 2,Undefined
ConfigGroup,Cameras,Camera 2,Multi Camera,Physical Camera 3,Undefined

# Preset: Camera 1
ConfigGroup,Cameras,Camera 1,Core,Camera,PM Cam
ConfigGroup,Cameras,Camera 1,Multi Camera,Physical Camera 1,Undefined
ConfigGroup,Cameras,Camera 1,Multi Camera,Physical Camera 2,Undefined
ConfigGroup,Cameras,Camera 1,Multi Camera,Physical Camera 3,Undefined


# Group: Bit Depth
# Preset: 100MHz 16bit
ConfigGroup,Bit Depth,100MHz 16bit,PM Cam,ReadoutRate,100MHz 16bit
ConfigGroup,Bit Depth,100MHz 16bit,Camera-2,ReadoutRate,100MHz 16bit
ConfigGroup,Bit Depth,100MHz 16bit,Camera-3,ReadoutRate,100MHz 16bit

# Preset: 200MHz 12bit
ConfigGroup,Bit Depth,200MHz 12bit,PM Cam,ReadoutRate,200MHz 12bit
ConfigGroup,Bit Depth,200MHz 12bit,Camera-2,ReadoutRate,200MHz 12bit
ConfigGroup,Bit Depth,200MHz 12bit,Camera-3,ReadoutRate,200MHz 12bit


# Group: SMART Streaming
# Preset: No
ConfigGroup,SMART Streaming,No,PM Cam,SMARTStreamingEnabled,No
ConfigGroup,SMART Streaming,No,Camera-2,SMARTStreamingEnabled,No
ConfigGroup,SMART Streaming,No,Camera-3,SMARTStreamingEnabled,No

# Preset: Yes
ConfigGroup,SMART Streaming,Yes,PM Cam,SMARTStreamingEnabled,Yes
ConfigGroup,SMART Streaming,Yes,Camera-2,SMARTStreamingEnabled,Yes
ConfigGroup,SMART Streaming,Yes,Camera-3,SMARTStreamingEnabled,Yes


# Group: HW Timestamp
# Preset: No
ConfigGroup,HW Timestamp,No,PM Cam,MetadataEnabled,No
ConfigGroup,HW Timestamp,No,Camera-2,MetadataEnabled,No
ConfigGroup,HW Timestamp,No,Camera-3,MetadataEnabled,No

# Preset: Yes
ConfigGroup,HW Timestamp,Yes,PM Cam,MetadataEnabled,Yes
ConfigGroup,HW Timestamp,Yes,Camera-2,MetadataEnabled,Yes
ConfigGroup,HW Timestamp,Yes,Camera-3,MetadataEnabled,Yes


# Group: Clear Mode
# Preset: Never
ConfigGroup,Clear Mode,Never,PM Cam,ClearMode,Never
ConfigGroup,Clear Mode,Never,Camera-2,ClearMode,Never
ConfigGroup,Clear Mode,Never,Camera-3,ClearMode,Never

# Preset: Pre-Sequence
ConfigGroup,Clear Mode,Pre-Sequence,PM Cam,ClearMode,Pre-Sequence
ConfigGroup,Clear Mode,Pre-Sequence,Camera-2,ClearMode,Pre-Sequence
ConfigGroup,Clear Mode,Pre-Sequence,Camera-3,ClearMode,Pre-Sequence

# Preset: Post-Sequence
ConfigGroup,Clear Mode,Post-Sequence,PM Cam,ClearMode,Post-Sequence
ConfigGroup,Clear Mode,Post-Sequence,Camera-2,ClearMode,Post-Sequence
ConfigGroup,Clear Mode,Post-Sequence,Camera-3,ClearMode,Post-Sequence

# Preset: Pre-Exposure and Post-Sequence
ConfigGroup,Clear Mode,Pre-Exposure and Post-Sequence,PM Cam,ClearMode,Pre-Exposure and Post-Sequence
ConfigGroup,Clear Mode,Pre-Exposure and Post-Sequence,Camera-2,ClearMode,Pre-Exposure and Post-Sequence
ConfigGroup,Clear Mode,Pre-Exposure and Post-Sequence,Camera-3,ClearMode,Pre-Exposure and Post-Sequence

# Preset: Pre-Exposure
ConfigGroup,Clear Mode,Pre-Exposure,PM Cam,ClearMode,Pre-Exposure
ConfigGroup,Clear Mode,Pre-Exposure,Camera-2,ClearMode,Pre-Exposure
ConfigGroup,Clear Mode,Pre-Exposure,Camera-3,ClearMode,Pre-Exposure

# Preset: Pre- and Post-Sequence
ConfigGroup,Clear Mode,Pre- and Post-Sequence,PM Cam,ClearMode,Pre- and Post-Sequence
ConfigGroup,Clear Mode,Pre- and Post-Sequence,Camera-2,ClearMode,Pre- and Post-Sequence
ConfigGroup,Clear Mode,Pre- and Post-Sequence,Camera-3,ClearMode,Pre- and Post-Sequence



# PixelSize settings

